PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Assignment2
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Routines
  Routine Intoduction
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Hello,
        Welcome to the experiment!
        In this experiment, there are two parts.
        Press enter!
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine trial2
    TextComponent text_3
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Welcome to Experiment 2.
        Press enter to see the rules
    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thankyou
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thankyou!!
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  Routine plus
    TextComponent text_4
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.200
      text = +
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  Routine Experiment2
    ImageComponent image
      image [set every repeat] = $Image1
      size = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.08
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  Routine Plus
    TextComponent text_5
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = +
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  Routine Experiment1
    ImageComponent imageGuess
      image [set every repeat] = $Image1
      size = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.08
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  Routine Rules
    TextComponent text_6
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this experiment your task is to guess if the shown face was happy or not.
        First, you will be shown a face.
        Then, there will a noise for 0.1 seconds.
        Next, there will be a blank screen for 2 seconds.
        In this,
                press the right key if shown face was happy.
                press the left key if shown face was sad.



        Press enter to start the experiment!
    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Rules2
    TextComponent text_7
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this experiment you have to tell if the face was happy,sad or angry.
        You will be shown a face.
        Then, there will be a noise for 0.1 seconds.
        Next,There will be blank screen for 2 seconds.
        You have to:
            -Press 'h' if the face is happy.
            -Press 's' if the face is sad.
            -Press 'a' if the face is angry.
        Press enter to start the experiment
    KeyboardComponent key_resp_5
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial1
    TextComponent text_9
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        Welcome to part 1.
        Press enter to see the rules.
    KeyboardComponent key_resp_7
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine sound1
    ImageComponent image_2
      image = noise.jpg
      size = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine sound2
    ImageComponent image_3
      image = noise.jpg
      size = (0, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine empty1
    TextComponent text_8
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine empty2
    TextComponent text_10
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'a','s','h'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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Flow
  Routine Intoduction
  Routine trial1
  Routine Rules
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = psychtest.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Image1', 'angry1.jpg')]),
      OrderedDict([('Image1', '9.jpeg')]),
      OrderedDict([('Image1', '10.jpg')]),
      OrderedDict([('Image1', '4happy.jpg')]),
      OrderedDict([('Image1', '6sad.jpeg')]),
      OrderedDict([('Image1', '9angry.jpeg')]),
      OrderedDict([('Image1', '8sad.jpeg')]),
      OrderedDict([('Image1', '6angry.jpeg')]),
      OrderedDict([('Image1', '3happy.jpg')]),
      OrderedDict([('Image1', '2happy.jpg')]),
      OrderedDict([('Image1', '8.jpg')]),
      OrderedDict([('Image1', '10angry.jpeg')]),
      OrderedDict([('Image1', '7.jpeg')]),
      OrderedDict([('Image1', '9sad.jpeg')]),
      OrderedDict([('Image1', '8angry.jpeg')]),
      OrderedDict([('Image1', '6sad.jpeg')]),
      OrderedDict([('Image1', '4happy.jpg')])]
    Routine plus
    Routine Experiment1
    Routine sound1
    Routine empty1
  LoopTerminator trials
  Routine trial2
  Routine Rules2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = psychtest.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Image1', 'angry1.jpg')]),
      OrderedDict([('Image1', '9.jpeg')]),
      OrderedDict([('Image1', '10.jpg')]),
      OrderedDict([('Image1', '4happy.jpg')]),
      OrderedDict([('Image1', '6sad.jpeg')]),
      OrderedDict([('Image1', '9angry.jpeg')]),
      OrderedDict([('Image1', '8sad.jpeg')]),
      OrderedDict([('Image1', '6angry.jpeg')]),
      OrderedDict([('Image1', '3happy.jpg')]),
      OrderedDict([('Image1', '2happy.jpg')]),
      OrderedDict([('Image1', '8.jpg')]),
      OrderedDict([('Image1', '10angry.jpeg')]),
      OrderedDict([('Image1', '7.jpeg')]),
      OrderedDict([('Image1', '9sad.jpeg')]),
      OrderedDict([('Image1', '8angry.jpeg')]),
      OrderedDict([('Image1', '6sad.jpeg')]),
      OrderedDict([('Image1', '4happy.jpg')])]
    Routine Plus
    Routine Experiment2
    Routine sound2
    Routine empty2
  LoopTerminator trials_2
  Routine Thankyou
